# Initial conditions are the steady state for p=0
#
c(0)=0.1001
y(0)=0.4085
ct(0)=40.816
#
# Parameter values
#
param p=0.4


k1=400
km1=52
k2=0.2
km2=0.21
k3=400
km3=377.2
k4=0.2
km4=0.029
k5=20
km5=1.64

bigK1=km1/k1
bigK2=km2/k2
bigK3=km3/k3
bigK4=km4/k4
bigK5=km5/k5

gamma = 5.5
Kpm = 0.3
param kf=1.11, Vp=0.9, kp=0.1
param Kbar = 2e-7
param Vpm=0.1
param alpha0=.005, Vsocc=.03, Ksocc = 150
param delta=5

#
# Define the functions used in the model
#

ce=gamma*(ct-c)
Po= ( p*c*(1-y)/((p+bigK1)*(c+bigK5)) )^3
phi1 = (km4*bigK2*bigK1 + km2*p*bigK4)*c/(bigK4*bigK2*(p+bigK1))
phi2 = (km2*p + km4*bigK3)/(p+bigK3)
Jpm = Vpm*c^2/(Kpm^2+c^2)
Jin = alpha0 + Vsocc*Ksocc^4/(ce^4+Ksocc^4)

Jserca=Vp*(c*c - Kbar*ce*ce)/(c*c+Kp*Kp)

#
# Define the differential equations here
#
dc/dt = (kf*Po)*(ce-c)-Jserca + delta*(Jin - Jpm)
dy/dt = phi1*(1-y) - phi2*y
dct/dt = delta*(Jin - Jpm)
#
@ total=400,dt=0.05,xp=t,yp=c,xlo=0,xhi=400,ylo=0,yhi=2,meth=gear,bounds=1000
@ ntst=50,nmax=2000,npr=2000,dsmin=0.01,dsmax=0.05,ds=0.02
@ parmin=0,parmax=2
@ autoxmin=0,autoxmax=2,autoymin=0,autoymax=2,nmax=20000

done