# -----------------------
# The NNF model of Kim and Forger (2012).
#
# For Chapter 10, Section 10.3.1, of
# Keener and Sneyd, Mathematical Physiology, Third Edition, Springer.
# Written by James Keener and James Sneyd.
# -----------------------

M(0)=0.5
Pc(0)=0.5
PT(0)=0.5
AT(0)=1
V(0) = 0.5

param alpha=20
param Kd=0.002
param del = 0.5

A = (AT-PT-Kd+((AT-PT-Kd)^2+4*AT*Kd)^0.5)/2
M'=alpha*A-M
Pc'=M-Pc
PT'=Pc-PT
AT' = del*(1/(1+V) - A)
V' = del*(A - V)

@ total=200,dt=0.05,xl0=0,xhi=200,ylo=0,yhi=20,meth=gear,bounds=10000
@ autovar=M,ntst=50,nmax=20000,npr=20000,dsmin=0.01,dsmax=0.05,ds=0.02,parmin=0,parmax=50
@ autoxmin=0,autoxmax=50,autoymin=0,autoymax=50
done
