# -----------------------
# The SNF model of Kim and Forger (2012).
#
# For Chapter 10, Section 10.3.1, of
# Keener and Sneyd, Mathematical Physiology, Third Edition, Springer.
# Written by James Keener and James Sneyd.
# -----------------------

M(0)=0.5
Pc(0)=0.5
P(0)=0.5

A = (AT-P-Kd+((AT-P-Kd)^2+4*AT*Kd)^0.5)/2
M'=alpha*A-M
Pc'=M-Pc
P'=Pc-P

param alpha=1
param Kd=1e-03
param AT=1

@ total=200,dt=0.05,xl0=0,xhi=200,ylo=0,yhi=20,meth=gear,bounds=10000
@ autovar=M,ntst=50,nmax=20000,npr=20000,dsmin=0.01,dsmax=0.05,ds=0.02,parmin=0,parmax=10
@ autoxmin=0,autoxmax=10,autoymin=0,autoymax=10
done
